PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://cambridge.eu.qualtrics.com/jfe/form/SV_0pszc5jlm8mlK3Y
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/AttentionCheck1.jpg', 'resources/AttentionCheck2.jpg', 'resources/AttentionCheck3.jpg', 'resources/abacus1_tr.png', 'resources/airfreshener1_tr.png', 'resources/apple1_tr.png', 'resources/asparagus1_tr.png', 'resources/bagel1_tr.png', 'resources/banana1_tr.png', 'resources/bandaid1_tr.png', 'resources/bank-1300155_640.png', 'resources/basket1_tr.png', 'resources/bathingsuit1_tr.png', 'resources/bathroomscale1_tr.png', 'resources/bbqmachine1_tr.png', 'resources/bed1_tr.png', 'resources/bell1_tr.png', 'resources/bike1_tr.png', 'resources/binder1_tr.png', 'resources/bird1_tr.png', 'resources/blackboard1_tr.png', 'resources/bottleofwine1_tr.png', 'resources/bow1_tr.png', 'resources/bowlingpin1_tr.png', 'resources/bowls1_tr.png', 'resources/boxinggloves1_tr.png', 'resources/breakfast1_tr.png', 'resources/cabinet1_tr.png', 'resources/cakemixer1_tr.png', 'resources/cheese1_tr.png', 'resources/chinesefood1_tr.png', 'resources/christmasstocking1_tr.png', 'resources/clock1_tr.png', 'resources/coat1_tr.png', 'resources/coffeemug1_tr.png', 'resources/coke1_tr.png', 'resources/cookie1_tr.png', 'resources/cow1_tr.png', 'resources/cowboyhat1_tr.png', 'resources/crayon1_tr.png', 'resources/cucumber1_tr.png', 'resources/dog1_tr.png', 'resources/dress1_tr.png', 'resources/eggs1_tr.png', 'resources/encyclopedia1_tr.png', 'resources/EndExperiment.jpg', 'resources/fantacan1_tr.png', 'resources/fireextinguisher1_tr.png', 'resources/fixoutline_cr_tr.png', 'resources/goggle1_tr.png', 'resources/granola1_tr.png', 'resources/grater1_tr.png', 'resources/hairdryer1_tr.png', 'resources/hammer1_tr.png', 'resources/handbag1_tr.png', 'resources/handsoap1_tr.png', 'resources/hat1_tr.png', 'resources/highheel1_tr.png', 'resources/hotdog1_tr.png', 'resources/iceskates1_tr.png', 'resources/Instruc_Slide1.jpg', 'resources/Instruc_Slide2.jpg', 'resources/Instruc_Slide3.jpg', 'resources/Instruc_Slide4.jpg', 'resources/Instruc_Slide5.jpg', 'resources/Instruc_Slide6.jpg', 'resources/Instruc_Slide7.jpg', 'resources/Instruc_Slide8.jpg', 'resources/Instruc_Slide9.jpg', 'resources/Instruc_Slide10.jpg', 'resources/Instruc_Slide11.jpg', 'resources/Instruc_Slide12.jpg', 'resources/Instruc_Slide13.jpg', 'resources/Instruc_Slide14.jpg', 'resources/Instruc_Slide15.jpg', 'resources/Instruc_Slide16.jpg', 'resources/Instruc_Slide17.jpg', 'resources/Instruc_Slide18.jpg', 'resources/Instruc_Slide19.jpg', 'resources/Instruc_Slide20.jpg', 'resources/jackolantern1_tr.png', 'resources/jellybeans1_tr.png', 'resources/kite1_tr.png', 'resources/lei1_tr.png', 'resources/lemon1_tr.png', 'resources/lipstick1_tr.png', 'resources/loaf1_tr.png', 'resources/minifan1_tr.png', 'resources/motorcycle1_tr.png', 'resources/mouthwash1_tr.png', 'resources/muffin1_tr.png', 'resources/nailpolish1_tr.png', 'resources/New_bathrobe1_tr.png', 'resources/New_bongo1_tr.png', 'resources/New_brusselssprout1_tr.png', 'resources/New_bunny1_tr.png', 'resources/New_camera1_tr.png', 'resources/New_candycane1_tr.png', 'resources/New_car1_tr.png', 'resources/New_cardboardbox1_tr.png', 'resources/New_cereal1_tr.png', 'resources/New_chocolatebar1_tr.png', 'resources/New_cocktail1_tr.png', 'resources/New_corn1_tr.png', 'resources/New_couch1_tr.png', 'resources/New_creditcard1_tr.png', 'resources/New_crown1_tr.png', 'resources/New_diningset1_tr.png', 'resources/New_discoball1_tr.png', 'resources/New_drill1_tr.png', 'resources/New_dumbbell1_tr.png', 'resources/New_eyemask1_tr.png', 'resources/New_fishbowl1_tr.png', 'resources/New_flashlight1_tr.png', 'resources/New_flowers1_tr.png', 'resources/New_fridge1_tr.png', 'resources/New_giraffe1_tr.png', 'resources/New_glove1_tr.png', 'resources/New_grandpiano1_tr.png', 'resources/New_guitar1_tr.png', 'resources/New_hairbrush1_tr.png', 'resources/New_hanger1_tr.png', 'resources/New_icecream1_tr.png', 'resources/New_icecubetray1_tr.png', 'resources/New_ladder1_tr.png', 'resources/New_laptop1_tr.png', 'resources/New_lifering1_tr.png', 'resources/New_lollipop1_tr.png', 'resources/New_microphone1_tr.png', 'resources/New_milk1_tr.png', 'resources/New_mirror1_tr.png', 'resources/New_oliveoil1_tr.png', 'resources/New_paracetamol1_tr.png', 'resources/New_parfait1_tr.png', 'resources/New_pencilholder1_tr.png', 'resources/New_perfume1_tr.png', 'resources/New_postbox1_tr.png', 'resources/New_powdermakeup1_tr.png', 'resources/New_remote1_tr.png', 'resources/New_rooster1_tr.png', 'resources/New_spraybottle1_tr.png', 'resources/New_tomato1_tr.png', 'resources/New_trampoline1_tr.png', 'resources/New_trolly1_tr.png', 'resources/New_watermelon1_tr.png', 'resources/noise14Circle_tr.png', 'resources/oven1_tr.png', 'resources/paintpalette1_tr.png', 'resources/pan1_tr.png', 'resources/partyhats1_tr.png', 'resources/penguin1_tr.png', 'resources/pickle1_tr.png', 'resources/pin1_tr.png', 'resources/pinecone1_tr.png', 'resources/pizza1_tr.png', 'resources/plant1_tr.png', 'resources/podium1_tr.png', 'resources/pokerchips1_tr.png', 'resources/popcorn1_tr.png', 'resources/potatochips1_tr.png', 'resources/present1_tr.png', 'resources/qtips1_tr.png', 'resources/radish1_tr.png', 'resources/Remember.jpg', 'resources/Remember.png', 'resources/ricecooker1_tr.png', 'resources/rollingpin1_tr.png', 'resources/rubikscube1_tr.png', 'resources/scarf1_tr.png', 'resources/scrabble1_tr.png', 'resources/seashell1_tr.png', 'resources/silvertray1_tr.png', 'resources/sink1_tr.png', 'resources/sippycup1_tr.png', 'resources/skippingrope1_tr.png', 'resources/slide1_tr.png', 'resources/soccerball1_tr.png', 'resources/spoon1_tr.png', 'resources/starfish1_tr.png', 'resources/steeringwheel1_tr.png', 'resources/stoplights1_tr.png', 'resources/streamer1_tr.png', 'resources/study.png', 'resources/suit1_tr.png', 'resources/sunglasses1_tr.png', 'resources/telephonebooth1_tr.png', 'resources/tennisball1_tr.png', 'resources/tissuebox1_tr.png', 'resources/toad1_tr.png', 'resources/toaster1_tr.png', 'resources/toothpaste1_tr.png', 'resources/towels1_tr.png', 'resources/tractor1_tr.png', 'resources/train1_tr.png', 'resources/trophy1_tr.png', 'resources/trumpet1_tr.png', 'resources/turtle1_tr.png', 'resources/umbrella1_tr.png', 'resources/vacuum1_tr.png', 'resources/valentinesdaycard1_tr.png', 'resources/vegeplatter1_tr.png', 'resources/wagon1_tr.png', 'resources/washingmachine1_tr.png', 'resources/watch1_tr.png', 'resources/waterfilter1_tr.png', 'resources/wheelchair1_tr.png', 'resources/wisk1_tr.png', 'resources/woodenbox1_tr.png', 'resources/wreath1_tr.png', 'resources/abacus1_tr.png', 'resources/airfreshener1_tr.png', 'resources/apple1_tr.png', 'resources/asparagus1_tr.png', 'resources/bagel1_tr.png', 'resources/banana1_tr.png', 'resources/bandaid1_tr.png', 'resources/bank-1300155_640.png', 'resources/basket1_tr.png', 'resources/bathingsuit1_tr.png', 'resources/bathroomscale1_tr.png', 'resources/bbqmachine1_tr.png', 'resources/bed1_tr.png', 'resources/bell1_tr.png', 'resources/bike1_tr.png', 'resources/binder1_tr.png', 'resources/bird1_tr.png', 'resources/blackboard1_tr.png', 'resources/bottleofwine1_tr.png', 'resources/bow1_tr.png', 'resources/bowlingpin1_tr.png', 'resources/bowls1_tr.png', 'resources/boxinggloves1_tr.png', 'resources/breakfast1_tr.png', 'resources/cabinet1_tr.png', 'resources/cakemixer1_tr.png', 'resources/cheese1_tr.png', 'resources/chinesefood1_tr.png', 'resources/christmasstocking1_tr.png', 'resources/clock1_tr.png', 'resources/coat1_tr.png', 'resources/coffeemug1_tr.png', 'resources/coke1_tr.png', 'resources/cookie1_tr.png', 'resources/cow1_tr.png', 'resources/cowboyhat1_tr.png', 'resources/crayon1_tr.png', 'resources/cucumber1_tr.png', 'resources/dog1_tr.png', 'resources/dress1_tr.png', 'resources/eggs1_tr.png', 'resources/encyclopedia1_tr.png', 'resources/EndExperiment.jpg', 'resources/fantacan1_tr.png', 'resources/fireextinguisher1_tr.png', 'resources/fixoutline_cr_tr.png', 'resources/goggle1_tr.png', 'resources/granola1_tr.png', 'resources/grater1_tr.png', 'resources/hairdryer1_tr.png', 'resources/hammer1_tr.png', 'resources/handbag1_tr.png', 'resources/handsoap1_tr.png', 'resources/hat1_tr.png', 'resources/highheel1_tr.png', 'resources/hotdog1_tr.png', 'resources/iceskates1_tr.png', 'resources/Instruc_Slide1.jpg', 'resources/Instruc_Slide2.jpg', 'resources/Instruc_Slide3.jpg', 'resources/Instruc_Slide4.jpg', 'resources/Instruc_Slide5.jpg', 'resources/Instruc_Slide6.jpg', 'resources/Instruc_Slide7.jpg', 'resources/Instruc_Slide8.jpg', 'resources/Instruc_Slide9.jpg', 'resources/Instruc_Slide10.jpg', 'resources/Instruc_Slide11.jpg', 'resources/Instruc_Slide12.jpg', 'resources/Instruc_Slide13.jpg', 'resources/Instruc_Slide14.jpg', 'resources/Instruc_Slide15.jpg', 'resources/Instruc_Slide16.jpg', 'resources/Instruc_Slide17.jpg', 'resources/Instruc_Slide18.jpg', 'resources/Instruc_Slide19.jpg', 'resources/Instruc_Slide20.jpg', 'resources/jackolantern1_tr.png', 'resources/jellybeans1_tr.png', 'resources/kite1_tr.png', 'resources/lei1_tr.png', 'resources/lemon1_tr.png', 'resources/lipstick1_tr.png', 'resources/loaf1_tr.png', 'resources/minifan1_tr.png', 'resources/motorcycle1_tr.png', 'resources/mouthwash1_tr.png', 'resources/muffin1_tr.png', 'resources/nailpolish1_tr.png', 'resources/New_bathrobe1_tr.png', 'resources/New_bongo1_tr.png', 'resources/New_brusselssprout1_tr.png', 'resources/New_bunny1_tr.png', 'resources/New_camera1_tr.png', 'resources/New_candycane1_tr.png', 'resources/New_car1_tr.png', 'resources/New_cardboardbox1_tr.png', 'resources/New_cereal1_tr.png', 'resources/New_chocolatebar1_tr.png', 'resources/New_cocktail1_tr.png', 'resources/New_corn1_tr.png', 'resources/New_couch1_tr.png', 'resources/New_creditcard1_tr.png', 'resources/New_crown1_tr.png', 'resources/New_diningset1_tr.png', 'resources/New_discoball1_tr.png', 'resources/New_drill1_tr.png', 'resources/New_dumbbell1_tr.png', 'resources/New_eyemask1_tr.png', 'resources/New_fishbowl1_tr.png', 'resources/New_flashlight1_tr.png', 'resources/New_flowers1_tr.png', 'resources/New_fridge1_tr.png', 'resources/New_giraffe1_tr.png', 'resources/New_glove1_tr.png', 'resources/New_grandpiano1_tr.png', 'resources/New_guitar1_tr.png', 'resources/New_hairbrush1_tr.png', 'resources/New_hanger1_tr.png', 'resources/New_icecream1_tr.png', 'resources/New_icecubetray1_tr.png', 'resources/New_ladder1_tr.png', 'resources/New_laptop1_tr.png', 'resources/New_lifering1_tr.png', 'resources/New_lollipop1_tr.png', 'resources/New_microphone1_tr.png', 'resources/New_milk1_tr.png', 'resources/New_mirror1_tr.png', 'resources/New_oliveoil1_tr.png', 'resources/New_paracetamol1_tr.png', 'resources/New_parfait1_tr.png', 'resources/New_pencilholder1_tr.png', 'resources/New_perfume1_tr.png', 'resources/New_postbox1_tr.png', 'resources/New_powdermakeup1_tr.png', 'resources/New_remote1_tr.png', 'resources/New_rooster1_tr.png', 'resources/New_spraybottle1_tr.png', 'resources/New_tomato1_tr.png', 'resources/New_trampoline1_tr.png', 'resources/New_trolly1_tr.png', 'resources/New_watermelon1_tr.png', 'resources/noise14Circle_tr.png', 'resources/oven1_tr.png', 'resources/paintpalette1_tr.png', 'resources/pan1_tr.png', 'resources/partyhats1_tr.png', 'resources/penguin1_tr.png', 'resources/pickle1_tr.png', 'resources/pin1_tr.png', 'resources/pinecone1_tr.png', 'resources/pizza1_tr.png', 'resources/plant1_tr.png', 'resources/podium1_tr.png', 'resources/pokerchips1_tr.png', 'resources/popcorn1_tr.png', 'resources/potatochips1_tr.png', 'resources/present1_tr.png', 'resources/qtips1_tr.png', 'resources/radish1_tr.png', 'resources/Remember.jpg', 'resources/Remember.png', 'resources/ricecooker1_tr.png', 'resources/rollingpin1_tr.png', 'resources/rubikscube1_tr.png', 'resources/scarf1_tr.png', 'resources/scrabble1_tr.png', 'resources/seashell1_tr.png', 'resources/silvertray1_tr.png', 'resources/sink1_tr.png', 'resources/sippycup1_tr.png', 'resources/skippingrope1_tr.png', 'resources/slide1_tr.png', 'resources/soccerball1_tr.png', 'resources/spoon1_tr.png', 'resources/starfish1_tr.png', 'resources/steeringwheel1_tr.png', 'resources/stoplights1_tr.png', 'resources/streamer1_tr.png', 'resources/study.png', 'resources/suit1_tr.png', 'resources/sunglasses1_tr.png', 'resources/telephonebooth1_tr.png', 'resources/tennisball1_tr.png', 'resources/tissuebox1_tr.png', 'resources/toad1_tr.png', 'resources/toaster1_tr.png', 'resources/toothpaste1_tr.png', 'resources/towels1_tr.png', 'resources/tractor1_tr.png', 'resources/train1_tr.png', 'resources/trophy1_tr.png', 'resources/trumpet1_tr.png', 'resources/turtle1_tr.png', 'resources/umbrella1_tr.png', 'resources/vacuum1_tr.png', 'resources/valentinesdaycard1_tr.png', 'resources/vegeplatter1_tr.png', 'resources/wagon1_tr.png', 'resources/washingmachine1_tr.png', 'resources/watch1_tr.png', 'resources/waterfilter1_tr.png', 'resources/wheelchair1_tr.png', 'resources/wisk1_tr.png', 'resources/woodenbox1_tr.png', 'resources/wreath1_tr.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Pilot1NewOnline
  keyboardBackend = ioHub
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Routines
  Routine Scale_Intro
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    TextComponent Scaling_intro
      color = $[1.000,1.000,1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will first need to check your screen size!

        Please take a moment to find a credit card or a card of the same size (e.g. driving license)

        When you have a card ready press the right arrow key to continue...
    KeyboardComponent key_resp_1
      allowedKeys = ['right']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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
  Routine scaletonist
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    TextComponent Text_Instruction
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be shown the instructions for the memory task...
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  Routine Instructions
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    CodeComponent instcode
      Code Type = Both
      Begin Experiment:
        instnum = (1);
      Begin JS Experiment:
        instnum = 1;
      Begin JS Routine:
        InstIm = (("resources/Instruc_Slide" + instnum.toString()) + ".jpg");
      Begin Routine:
        InstIm = 'resources/Instruc_Slide'+ str(instnum) +'.jpg'
      End JS Routine:
        instnum = (instnum + 1);
      End Routine:
        instnum = instnum + 1;
    ImageComponent inst1
      image [set every repeat] = $InstIm
      size [set every repeat] = (24*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.25
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    KeyboardComponent move1
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Practice_Text
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        pmsg = "Get Ready! \n \n Starting practice learning phase. \n \n Press SPACE to begin"
      End Routine:
        cpracfile = ("condfile/OrderTest_Prac.csv")
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
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    KeyboardComponent key_resp_8
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine fix
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    ImageComponent fixim
      image = resources/fixoutline_cr_tr.png
      size [set every repeat] = $(0.7092*x_scale, 0.7092*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Learn_Prac
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    CodeComponent code_23
      Code Type = Both
      Begin JS Routine:
        trID = TrialID.toString();
        Img = obj1;
        Eccobj1 = (4.3794 * ((x_scale + y_scale) / 2));
        deg1 = ((-obj1loc) + 90);
        obj1px1 = (Eccobj1 * Math.cos(((Math.PI / 180) * deg1)));
        obj1py1 = (Eccobj1 * Math.sin(((Math.PI / 180) * deg1)));
      Begin Routine:
        trID = str(TrialID)
        Img = obj1

        #trID = str(trialID)
        #dispfile = 'resources2/DisplPrac'+ trID +'.jpg'
        #win.getMovieFrame()
        #win.saveMovieFrames('1.png')
        #if CueValidity == 1:
            #Img = obj1

        #if CueValidity == 0:
            #Img = obj2

        #if CueValidity == 0.5:
            #Img = obj3

        #CuedImg = ['resources/' + Img]

        #Object1
        Eccobj1 = 4.3794*((x_scale+y_scale)/2)

        deg1 = -obj1loc+90

        obj1px1 = Eccobj1 * cos((pi/180) *(deg1))
        obj1py1 = Eccobj1 * sin((pi/180) *(deg1))


        #Object2
        #Eccobj2 = 4.3794*((x_scale+y_scale)/2)

        #deg2 = -obj2loc+90

        #obj1posx2 = Eccobj2 * cos((pi/180) *(deg2))
        #obj1posy2 = Eccobj2 * sin((pi/180) *(deg2))

        #Object3
        #Eccobj3 = 4.3794*((x_scale+y_scale)/2)

        #deg3 = -obj3loc+90

        #obj1posx3 = Eccobj3 * cos((pi/180) *(deg3))
        #obj1posy3 = Eccobj3 * sin((pi/180) *(deg3))
    PolygonComponent graybackStudy
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Object1Study
      image [set every repeat] = $'resources/'+ obj1
      pos [set every repeat] = [obj1px1,obj1py1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent Study_Text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = Study
      units = norm
      wrapWidth = 1.5
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  Routine Test_Prac
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    CodeComponent Prac_Learn_code
      Code Type = Both
      Begin Experiment:
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []
      Begin JS Experiment:
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
      Begin JS Routine:
        Eccentricity1 = (2.1277 * ((x_scale + y_scale) / 2));
        Eccentricityobj1 = (4.3794 * ((x_scale + y_scale) / 2));
        keys1 = [];
        degup1 = ((-testObj1LocStartVal1)+90);
        pdeg1 = (testObj1LocStartVal1);
        obj1posx1 = (Eccentricityobj1 * Math.cos(((Math.PI / 180) * degup1)));
        obj1posy1 = (Eccentricityobj1 * Math.sin(((Math.PI / 180) * degup1)));
        pointer1posX1 = (Eccentricity1 * Math.cos(((Math.PI / 180) * degup1)));
        pointer1posY1 = (Eccentricity1 * Math.sin(((Math.PI / 180) * degup1)));
      Begin Routine:
        #Object1Test
        Eccentricity1 = 2.1277*((x_scale+y_scale)/2)
        Eccentricityobj1 = 4.3794*((x_scale+y_scale)/2)

        keys1 = []

        #degup1 = testObj1LocTargetVal
        #pdeg1 = -testObj1LocTargetVal+90

        degup1 = ((-testObj1LocStartVal1)+90)
        pdeg1 = (testObj1LocStartVal1)

        obj1posx1 = Eccentricityobj1 * cos((pi/180) *(degup1))
        obj1posy1 = Eccentricityobj1 * sin((pi/180) *(degup1))

        pointer1posX1 = Eccentricity1 * cos((pi/180) *(degup1))
        pointer1posY1 = Eccentricity1 * sin((pi/180) *(degup1))
      Each Frame:
        keys1=event.getKeys()

        if len(keys1):
            if 'left' in keys1:
                degup1 = (degup1 + 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_WMTest_Prac.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_WMTest_Prac.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
            elif 'right' in keys1:
                degup1 = (degup1 - 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_WMTest_Prac.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_WMTest_Prac.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys1 = psychoJS.eventManager.getKeys();
        if (keys1.length) {
            if (_pj.in_es6("left", keys1)) {
                degup1 = (degup1 + 2);
                posX1 = (Eccentricityobj1 * Math.cos(((Math.PI / 180) * degup1)));
                posY1 = (Eccentricityobj1 * Math.sin(((Math.PI / 180) * degup1)));
                obj1_WMTest_Prac.setPos([posX1, posY1]);
                pointposX1 = (Eccentricity1 * Math.cos(((Math.PI / 180) * degup1)));
                pointposY1 = (Eccentricity1 * Math.sin(((Math.PI / 180) * degup1)));
                pointer1_WMTest_Prac.setPos([pointposX1, pointposY1]);
                pdeg1 = ((-degup1) + 90);
            } else {
                if (_pj.in_es6("right", keys1)) {
                    degup1 = (degup1 - 2);
                    posX1 = (Eccentricityobj1 * Math.cos(((Math.PI / 180) * degup1)));
                    posY1 = (Eccentricityobj1 * Math.sin(((Math.PI / 180) * degup1)));
                    obj1_WMTest_Prac.setPos([posX1, posY1]);
                    pointposX1 = (Eccentricity1 * Math.cos(((Math.PI / 180) * degup1)));
                    pointposY1 = (Eccentricity1 * Math.sin(((Math.PI / 180) * degup1)));
                    pointer1_WMTest_Prac.setPos([pointposX1, pointposY1]);
                    pdeg1 = ((-degup1) + 90);
                }
            }
        }
      End JS Routine:
        //pdeg1_adj = (((pdeg1 * (- 1)) + 90) % 360);
        pdeg1_adj = ((((pdeg1)%360) + 360)%360);
      End Routine:
        #for i in range(len(pdeg1)):
         #   pdeg1_neg[i] = -pdeg1[i]

        pdeg1_adj = (((pdeg1*-1) + 90) % 360);
    PolygonComponent graybackTest
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_Prac_Learn
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent Test_Text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Test
      units = norm
      wrapWidth = 1.5
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    TextComponent Test_Text_red
      color = red
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 15
      text = Test
      units = norm
      wrapWidth = 1.5
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    TextComponent Text_Space
      letterHeight = 0.08
      pos = (0,6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Press SPACE to submit your response
      units = norm
      wrapWidth = 1.5
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    ImageComponent circim_WMTest_Prac
      image = circ.png
      size [set every repeat] = $(4.255*x_scale, 4.255*y_scale)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent pointer1_WMTest_Prac
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      ori [set every frame] = pdeg1
      pos [set every repeat] = [pointer1posX1,pointer1posY1]
      shape = rectangle
      size [set every repeat] = [0.0625*x_scale, 0.25*y_scale]
      startVal [time (s)] = 0
      units = height
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    ImageComponent obj1_WMTest_Prac
      image [set every repeat] = $'resources/' + Img
      pos [set every repeat] = [obj1posx1,obj1posy1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
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    CodeComponent Var_Prac_Learn_code
      Code Type = JS
      Begin JS Experiment:
         function preventClick(event) { event.preventDefault(); }
         document.addEventListener("contextmenu", preventClick, event, false);
         document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData('respposX1', posX1);
        psychoJS.experiment.addData('respposY1', posY1);
        psychoJS.experiment.addData('locresp1', pdeg1);
        psychoJS.experiment.addData('locresp1_adj', pdeg1_adj);
        psychoJS.experiment.addData('location', degup1);

        thisExp.addData('respposX1', posX1);
        thisExp.addData('respposY1', posY1);
        thisExp.addData('locresp1', pdeg1);
        thisExp.addData('locresp1_adj', pdeg1_adj);


        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        FCdisp1 = []
        FCleft1 = []
        FCright1 = []
        FCims1 = []
        FCim1 = []
  Routine Prac_End
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        End of practice

        We are now starting main task...
  Routine Study_File
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    CodeComponent block_code
      Code Type = Both
      Begin JS Routine:
        function getRandomInt(min,max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min)) + min;
        }
        pptcondition = util.randint(1, 300);
        //loopstart = 0;
        //loopend = 40;
        bind = 1;
        studytestfile = (("condfile/Study_" + pptcondition.toString()) + "_Merged_With_NA.csv");

        // Define the immediate test file path
        ImmTestFile = ("condfile/Immediate_" + pptcondition.toString() + "_Merged_With_NA.csv");

        // Prepare both study and immediate test files as resources
        psychoJS._serverManager.prepareResources([
            { name: studytestfile, path: studytestfile },
            { name: ImmTestFile, path: ImmTestFile }
        ]);

        // Assign the study file to a variable
        cfile = studytestfile;
        //loopstart = 0;
        //loopend = 40;
        bind = 1;

        psychoJS.experiment.addData('condnum', pptcondition);
      Begin Routine:
        pptcondition = randint(1,300);
        #pptcondition =('1')
        #loopstart = 0
        #loopend = 40
        bind = 1
        cfile = (("condfile/Study_" + str(pptcondition)) + "_Merged_With_NA.csv");
        ImmTestFile=(("condfile/Immediate_" + str(pptcondition)) + "_Merged_With_NA.csv");
      End JS Routine:
        psychoJS.experiment.addData('condnum', pptcondition);
      End Routine:
        thisExp.addData('condnum', pptcondition)
  Routine Learn_Display
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        trID = str(TrialID)
        Img = obj1
        #dispfile = 'resources/Displ'+ trID +'.jpg'

        #trID = str(trialID)
        #dispfile = 'resources2/DisplPrac'+ trID +'.jpg'
        #win.getMovieFrame()
        #win.saveMovieFrames('1.png')

        #CuedImg = ['resources/' + Img]

        #Object1

        Eccobj1 = 4.3794*((x_scale+y_scale)/2)

        deg1 = -obj1loc+90

        obj1px1 = Eccobj1 * cos((pi/180) *(deg1))
        obj1py1 = Eccobj1 * sin((pi/180) *(deg1))
    PolygonComponent graybackStudy_2
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent Object_1_Study
      image [set every repeat] = $'resources/'+ obj1
      pos [set every repeat] = [obj1px1,obj1py1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent Study_Text_2
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Study
      units = norm
      wrapWidth = 1.5
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  Routine Display_Test
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    CodeComponent Learn_code
      Code Type = Both
      Begin Experiment:
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []
      Begin JS Experiment:
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
      Begin JS Routine:
        psychoJS.eventManager.clearEvents()
        Eccentricity1 = (2.1277 * ((x_scale + y_scale) / 2));
        Eccentricityobj1 = (4.3794 * ((x_scale + y_scale) / 2));
        keys1 = [];
        degup1 = ((-testObj1LocStartVal1)+90);
        pdeg1 = (testObj1LocStartVal1);
        obj1posx1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
        obj1posy1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
        pointer1posX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
        pointer1posY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
      Begin Routine:
        #Object1Test
        Eccentricity1 = 2.1277*((x_scale+y_scale)/2)
        Eccentricityobj1 = 4.3794*((x_scale+y_scale)/2)

        keys1 = []

        #degup1 = testObj1LocTargetVal
        #pdeg1 = -testObj1LocTargetVal+90

        degup1 = ((-testObj1LocStartVal1)+90)
        pdeg1 = (testObj1LocStartVal1)

        obj1posx1 = Eccentricityobj1 * cos((pi/180) *(degup1))
        obj1posy1 = Eccentricityobj1 * sin((pi/180) *(degup1))

        pointer1posX1 = Eccentricity1 * cos((pi/180) *(degup1))
        pointer1posY1 = Eccentricity1 * sin((pi/180) *(degup1))
      Each Frame:
        keys1=event.getKeys()

        if len(keys1):
            if 'left' in keys1:
                degup1 = (degup1 + 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_WMTest.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_WMTest.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
            elif 'right' in keys1:
                degup1 = (degup1 - 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_WMTest.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_WMTest.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys1 = psychoJS.eventManager.getKeys();
        if (keys1.length) {
            if (_pj.in_es6("left", keys1)) {
                degup1 = (degup1 + 2);
                posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                obj1_WMTest.setPos([posX1, posY1]);
                pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                pointer1_WMTest.setPos([pointposX1, pointposY1]);
                pdeg1 = ((-degup1) + 90);
            } else {
                if (_pj.in_es6("right", keys1)) {
                    degup1 = (degup1 - 2);
                    posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                    posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                    obj1_WMTest.setPos([posX1, posY1]);
                    pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                    pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                    pointer1_WMTest.setPos([pointposX1, pointposY1]);
                    pdeg1 = ((-degup1) + 90);
                }
            }
        }
      End JS Routine:
        pdeg1_adj = ((((pdeg1) % 360) + 360)%360);
      End Routine:
        #for i in range(len(pdeg1)):
         #   pdeg1_neg[i] = -pdeg1[i]

        pdeg1_adj = (((pdeg1*-1) + 90) % 360);
    PolygonComponent graybackLearn
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_Learn
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent Test_Text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Test
      units = norm
      wrapWidth = 1.5
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    TextComponent Test_Text_red2
      color = red
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 15
      text = Test
      units = norm
      wrapWidth = 1.5
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    ImageComponent circim_WMTest
      image = circ.png
      size [set every repeat] = $(4.255*x_scale, 4.255*y_scale)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent pointer1_WMTest
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      ori [set every frame] = pdeg1
      pos [set every repeat] = [pointer1posX1,pointer1posY1]
      shape = rectangle
      size [set every repeat] = [0.0625*x_scale, 0.25*y_scale]
      startVal [time (s)] = 0
      units = height
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    ImageComponent obj1_WMTest
      image [set every repeat] = $'resources/' + Img
      pos [set every repeat] = [obj1posx1,obj1posy1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
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    CodeComponent Var_Learn_code
      Code Type = JS
      Begin JS Experiment:
         function preventClick(event) { event.preventDefault(); }
         document.addEventListener("contextmenu", preventClick, event, false);
         document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData('respposX1', posX1);
        psychoJS.experiment.addData('respposY1', posY1);
        psychoJS.experiment.addData('locresp1', pdeg1);
        psychoJS.experiment.addData('locresp1_adj', pdeg1_adj);


        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        FCdisp1 = []
        FCleft1 = []
        FCright1 = []
        FCims1 = []
        FCim1 = []
  Routine NewObject
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    CodeComponent FC_code2
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        FCleft1 = null;
        FCdisp1 = null;
        myReps = 1;
        Fix=0;

        if (OldImages === 1 && Imm_Delay === 1) {
            FCleft1 = testObj1Target;
            FCdisp1 = 'resources/' + testObj1Target.split('.')[0] + '.png';
        } else if (OldImages === 0 && Imm_Delay === 1) {
            FCleft1 = NewObject;
            FCdisp1 = 'resources/' + NewObject.split('.')[0] + '.png';
        }

        if (Imm_Delay !== 2) {
            FCim = 'resources/' + FCleft1;
        } else if (Imm_Delay === 2) {
            myReps = 0;
            continueRoutine = false;
        }
      Begin Routine:
        FCleft1 = None
        FCdisp1 = None
        myReps = 1
        Fix=0

        if OldImages == 1 and Imm_Delay == 1:
            FCleft1 = testObj1Target
            FCdisp1 = 'resources/' + testObj1Target.rsplit('.', 1)[0] + '.png'
        elif OldImages == 0 and Imm_Delay == 1:
            FCleft1 = NewObject
            FCdisp1 = 'resources/' + NewObject.rsplit('.', 1)[0] + '.png'


        if Imm_Delay != 2:
            FCim = 'resources/' + FCleft1
        elif Imm_Delay == 2:
             myReps = 0
             continueRoutine = False
      Each JS Frame:
        if ((FCKey2.keys !== undefined) && (FCKey2.keys == '1')) {
            continueRoutine = true;
        }
        if (Imm_Delay!==2) {
            continueRoutine=true;
        } else if (Imm_Delay==2) {
            myReps=0;
            continueRoutine=false;
        }
      End JS Routine:
        Fix=0;
        myReps=1;

        if ((FCKey2.keys !== undefined) && (FCKey2.keys == '1')) {
            Fix=0;
            continueRoutine = true;
        } else if (FCKey2.keys =='2') {
            myReps=0;
            Fix=1;
            continueRoutine = false;
        }
      End Routine:
        # Check for keyboard presses
        #if '3' in FCKey2.keys or '4' in FCKey2.keys:
            #continueRoutine = False  # Do not continue this routine
        Fix=0

        if FCKey2.keys=='1':
            Fix=0
            continueRoutine = True

        elif FCKey2.keys=='2':
            Fix=1
            myReps=0
            continueRoutine = False

        if 'left' in FCKey2.keys:
            FCim = FCims[0]
    PolygonComponent Greysquare2
      fillColor = grey
      lineColor = grey
      nVertices = 400
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent FC_disp2
      image [set every repeat] = $FCim
      pos [set every repeat] = (0, 0.066)
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Old_Key_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos [set every repeat] = (-0.17,-0.20)
      startVal [time (s)] = 0.0
      text = OLD
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    TextComponent OneKey2
      color = Yellow
      letterHeight = 0.03
      pos [set every repeat] = (-0.17,-0.25)
      startVal [time (s)] = 0.0
      text = Press 1
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    TextComponent New_Key_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos [set every repeat] = (0.17,-0.20)
      startVal [time (s)] = 0.0
      text = NEW
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    TextComponent TwoKey2
      color = Yellow
      letterHeight = 0.03
      pos [set every repeat] = (0.17,-0.25)
      startVal [time (s)] = 0.0
      text = Press 2
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
  Routine BLockTracker3
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    CodeComponent code_13
      Code Type = Both
      Begin JS Routine:
        bmsg = "Get Ready! \n \n Starting Block 3 of 3 \n \n Press SPACE to begin when ready";
      Begin Routine:
        bmsg = "Get Ready! \n \n Starting Block 3 of 3 \n \n Press SPACE to begin when ready"
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bmsg
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    KeyboardComponent key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine End
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    ImageComponent EndingScreen
      image = resources/EndExperiment.jpg
      size [set every repeat] = (24*x_scale, 13.5*y_scale)
      startVal [time (s)] = 1
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    KeyboardComponent EndKey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
         // Restore cursor visibility before showing the thank you message
            document.body.style.cursor = 'default';
        // Function to redirect to Qualtrics link
        function redirectToQualtrics() {
            window.location.href = "https://cambridge.eu.qualtrics.com/jfe/form/SV_0pszc5jlm8mlK3Y"; // Replace with your actual Qualtrics link
        }

        // Automatically redirect after 10 seconds
        setTimeout(redirectToQualtrics, 10000); // 10000 milliseconds = 10 seconds
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  Routine Remember_Rating
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    CodeComponent Remember_Code
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        if ((FCKey2_2.keys !== undefined) && (FCKey2_2.keys == '1' || FCKey2_2.keys == '2')) {
            continueRoutine = true;
        }
      Each JS Frame:
        if ((FCKey2_2.keys !== undefined) && (FCKey2_2.keys == '1' || FCKey2_2.keys == '2')) {
            continueRoutine = true;
        }



        if ((Imm_Delay !== 2)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
      End JS Routine:
        if ((FCKey2_2.keys !== undefined) && (FCKey2_2.keys == '1' || FCKey2_2.keys == '2')) {
            continueRoutine = true;
        }
      End Routine:
        if '1' in FCKey2_2.keys or '2' in FCKey2_2.keys:
            continueRoutine = True  # Restart the loop (Go back to the next FC_1 routine)
        else:
            continueRoutine = False

        if 'left' in FCKey2_2.keys:
            FCim = FCims[0]
    ImageComponent RememberImage
      image = resources/Remember.png
      size [set every repeat] = $(24*x_scale,13.5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_2
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine ImmediateTest
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    CodeComponent Imm_Test_code
      Code Type = Both
      Begin Experiment:
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []
      Begin JS Experiment:
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
      Begin JS Routine:
        if ((Imm_Delay !== 2)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }

        psychoJS.eventManager.clearEvents()
        Eccentricity1 = (2.1277 * ((x_scale + y_scale) / 2));
        Eccentricityobj1 = (4.3794 * ((x_scale + y_scale) / 2));
        keys1 = [];
        if (OldImages == 0 && Imm_Delay == 1) {
            degup1 = ((-testNewLocStartVal)+90);
            pdeg1 = (testNewLocStartVal);
        } else if (OldImages == 1 && Imm_Delay == 1) {
        degup1 = ((-testObj1LocStartVal2)+90);
        pdeg1 = (testObj1LocStartVal2);
        }
        obj1posx1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
        obj1posy1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
        pointer1posX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
        pointer1posY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
        //Eccentricity2 = (2.1277 * ((x_scale + y_scale) / 2));
        //Eccentricityobj2 = (4.3794 * ((x_scale + y_scale) / 2));
        //if (Imm_Delay != 2){
        //continueRoutine = true;
        //}
        //else if (Imm_Delay == 2){
           // continueRoutine = false:}
      Begin Routine:
        #Object1Test
        Eccentricity1 = 2.1277*((x_scale+y_scale)/2)
        Eccentricityobj1 = 4.3794*((x_scale+y_scale)/2)

        keys1 = []

        #if new image use the newlocstart val
        if OldImages == 0 and Imm_Delay == 1:
            degup1 = ((-testNewLocStartVal)+90)
            pdeg1 = (testNewLocStartVal)
        elif OldImages == 1 and Imm_Delay==1:
            degup1 = ((-testObj1LocStartVal2)+90)
            pdeg1 = (testObj1LocStartVal2)

        #degup1 = testObj1LocTargetVal
        #pdeg1 = -testObj1LocTargetVal+90

        obj1posx1 = Eccentricityobj1 * cos((pi/180) *(degup1))
        obj1posy1 = Eccentricityobj1 * sin((pi/180) *(degup1))

        pointer1posX1 = Eccentricity1 * cos((pi/180) *(degup1))
        pointer1posY1 = Eccentricity1 * sin((pi/180) *(degup1))
      Each Frame:
        keys1=event.getKeys()

        if len(keys1):
            if 'left' in keys1:
                degup1 = (degup1 + 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_TImm_est.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_Imm_Test.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
            elif 'right' in keys1:
                degup1 = (degup1 - 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_Imm_Test.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_Imm_Test.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
        if Imm_Delay != 2:
            continueRoutine = True
        else:
             continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys1 = psychoJS.eventManager.getKeys();
        if (keys1.length) {
            if (_pj.in_es6("left", keys1)) {
                degup1 = (degup1 + 2);
                posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                obj1_Imm_Test.setPos([posX1, posY1]);
                pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                pointer1_Imm_Test.setPos([pointposX1, pointposY1]);
                pdeg1 = ((-degup1) + 90);
            } else {
                if (_pj.in_es6("right", keys1)) {
                    degup1 = (degup1 - 2);
                    posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                    posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                    obj1_Imm_Test.setPos([posX1, posY1]);
                    pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                    pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                    pointer1_Imm_Test.setPos([pointposX1, pointposY1]);
                    pdeg1 = ((-degup1) + 90);
                }
            }
        }
      End JS Routine:
        pdeg2_adj = ((((pdeg1) % 360) + 360)%360);
      End Routine:
        #for i in range(len(pdeg1)):
         #   pdeg1_neg[i] = -pdeg1[i]

        pdeg2_adj = (((pdeg1*-1) + 90) % 360);
    PolygonComponent graybackImmTest
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_Test
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent Loc_tr_Test
      image = loc_cr_tr.png
      size [set every repeat] = $(2.9078*x_scale, 0.7270*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = height
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    ImageComponent Loc_tr_red_Test
      image = locred_cr_tr.png
      size [set every repeat] = $(2.9078*x_scale, 0.7270*y_scale)
      startVal [time (s)] = 15
      units = height
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    ImageComponent circim_Test
      image = circ.png
      size [set every repeat] = $(4.255*x_scale, 4.255*y_scale)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent pointer1_Imm_Test
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      ori [set every frame] = pdeg1
      pos [set every repeat] = [pointer1posX1,pointer1posY1]
      shape = rectangle
      size [set every repeat] = [0.0625*x_scale, 0.25*y_scale]
      startVal [time (s)] = 0
      units = height
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    ImageComponent obj1_Imm_Test
      image [set every repeat] = $FCim
      pos [set every repeat] = [obj1posx1,obj1posy1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
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    CodeComponent Var_code
      Code Type = JS
      Begin JS Experiment:
         function preventClick(event) { event.preventDefault(); }
         document.addEventListener("contextmenu", preventClick, event, false);
         document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData('respposX2', posX1);
        psychoJS.experiment.addData('respposY2', posY1);
        psychoJS.experiment.addData('locresp2', pdeg1);
        psychoJS.experiment.addData('locresp2_adj', pdeg2_adj);
        psychoJS.experiment.addData('location', degup1);

        thisExp.addData('respposX2', posX1);
        thisExp.addData('respposY2', posY1);
        thisExp.addData('locresp2', pdeg1);
        thisExp.addData('locresp2_adj', pdeg2_adj);

        pdeg1 = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        FCdisp1 = []
        FCleft1 = []
        FCright1 = []
        FCims1 = []
        FCims = []
  Routine BlockTracker2
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    CodeComponent code_11
      Code Type = Both
      Begin JS Routine:
        bmsg = "Get Ready! \n \n Starting Block 2 of 3 \n \n Press SPACE to begin when ready";
      Begin Routine:
        bmsg = "Get Ready! \n \n Starting Block 2 of 3 \n \n Press SPACE to begin when ready"
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bmsg
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    KeyboardComponent key_resp_7
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine BlockTracker1
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        bmsg = "Get Ready! \n \n Starting Block 1 of 3: Learning Phase \n \n Press SPACE to begin when ready";
      Begin Routine:
        bmsg = "Get Ready! \n \n Starting Block 1 of 3: Learning Phase \n\n Press SPACE to begin when ready"
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bmsg
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    KeyboardComponent key_resp_11
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine NewObject_Prac
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    CodeComponent FC_code
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
        skipped_trials = [];
        old_count = 0;
        new_count = 0;
        consecutive_old = 0;
        consecutive_new = 0;
        max_consecutive = 2;
      Begin JS Routine:
        FCleft1 = null;
        FCdisp1 = null;

        if (OldImages === 1) {
            FCleft1 = testObj1Target;
            FCdisp1 = "resources/" + testObj1Target.split(".").slice(0, -1).join(".") + ".png";
        } else if (OldImages === 0) {
            FCleft1 = NewObject;
            FCdisp1 = "resources/" + NewObject.split(".").slice(0, -1).join(".") + ".png";
        }

        FCim = "resources/" + FCleft1
      Begin Routine:
        FCleft1 = None
        FCdisp1 = None

        if OldImages == 1:
            FCleft1 = testObj1Target
            FCdisp1 = 'resources/' + testObj1Target.rsplit('.', 1)[0] + '.png'
        elif OldImages == 0:
            FCleft1 = NewObject
            FCdisp1 = 'resources/' + NewObject.rsplit('.', 1)[0] + '.png'

        FCim = 'resources/' + FCleft1
      Each JS Frame:
        if ((FCKey2_3.keys !== undefined) && (FCKey2_3.keys == '1')) {
            continueRoutine = true;
        }
      End JS Routine:
        myRepsPrac = 1;
        fix=0;

        if ((FCKey2_3.keys !== undefined) && (FCKey2_3.keys == '1')) {
            continueRoutine = true;
            myRepsPrac =1;
            fix=0;
        } else {
            continueRoutine = false;
            myRepsPrac=0;
            fix=1;
        }

        // Check if the attention question has not been shown
        //if (!attention2_shown) {
            //Attention = 1; // Force the Attention2_question to run
        //} else {
            //Attention = 0; // Skip if it has already been shown
        //}
      End Routine:
        # Check for keyboard presses
        #if '3' in FCKey2_3.keys or '4' in FCKey2_3.keys:
            #continueRoutine = False  # Do not continue this routine


        myRepsPrac=1
        fix=0

        if FCKey2_3.keys=='1':
            continueRoutine = True
            myRepsPrac=1
            fix=0
        else:
            myRepsPrac=0
            fix=1
            continueRoutine = False

        # Check if the attention question has not been shown
        #if not attention2_shown:
            #Attention = 1  # Force the Attention2_question to run
        #else:
            #Attention = 0  # Skip if it has already been shown
    PolygonComponent Greysquare2_2
      fillColor = grey
      lineColor = grey
      nVertices = 400
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent FC_disp2_2
      image [set every repeat] = $FCdisp1
      pos [set every repeat] = (0, 0.066)
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_3
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Old_Key_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos [set every repeat] = (-0.17,-0.20)
      startVal [time (s)] = 0.0
      text = OLD
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    TextComponent OneKey2_2
      color = Yellow
      letterHeight = 0.03
      pos [set every repeat] = (-0.17,-0.25)
      startVal [time (s)] = 0.0
      text = Press 1
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    TextComponent New_Key_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos [set every repeat] = (0.17,-0.20)
      startVal [time (s)] = 0.0
      text = NEW
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    TextComponent TwoKey2_2
      color = Yellow
      letterHeight = 0.03
      pos [set every repeat] = (0.17,-0.25)
      startVal [time (s)] = 0.0
      text = Press 2
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  Routine Remember_Rating_Prac
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    CodeComponent Remember_Code_2
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        if ((FCKey2_4.keys !== undefined) && (FCKey2_4.keys == '1' || FCKey2_4.keys == '2')) {
            continueRoutine = true;
        }
      Each JS Frame:
        if ((FCKey2_4.keys !== undefined) && (FCKey2_4.keys == '1' || FCKey2_4.keys == '2')) {
            continueRoutine = true;
        }
      End JS Routine:
        if ((FCKey2_4.keys !== undefined) && (FCKey2_4.keys == '1' || FCKey2_4.keys == '2')) {
            continueRoutine = true;
        }
      End Routine:
        if '1' in FCKey2_4.keys or '2' in FCKey2_4.keys:
            continueRoutine = True  # Restart the loop (Go back to the next FC_1 routine)
        else:
            continueRoutine = False

        if 'left' in FCKey2_4.keys:
            FCim = FCims[0]
    ImageComponent RememberImage_2
      image = resources/Remember.png
      size [set every repeat] = $(24*x_scale,13.5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_4
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Imm_Test_Instruct_3
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        pmsg = "You will now complete the third and final recall phase.\n \n  As a reminder, your memory for some of the studied objects in the prior learning phase as well as new objects not in the learning phase, will be tested\n \n  \n \n Press SPACE to begin"
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
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    KeyboardComponent key_resp_13
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine ImmTest_Instruct_Prac
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        pmsg = "You will now complete the practice recall phase.\n \n Your memory for the studied objects in the practice learning phase as well as new objects not in the practice learning phase, will be tested\n \n  \n \n Press SPACE to begin"
      End Routine:
        cpracfile = ("condfile/OrderTest_Prac.csv")
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
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    KeyboardComponent key_resp_9
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Imm_Test_Instruct_1
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        pmsg = "You will now complete the first recall phase.\n \n  As a reminder, your memory for some of the studied objects in the prior learning phase as well as new objects not in the learning phase, will be tested\n \n  \n \n Press SPACE to begin"
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
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    KeyboardComponent key_resp_12
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Imm_Test_Instruct_2
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        pmsg = "You will now complete the second recall phase.\n \n  As a reminder your memory for some of the studied objects in the prior learning phase as well as new objects not in the learning phase, will be tested\n \n  \n \n Press SPACE to begin"
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
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    KeyboardComponent key_resp_10
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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
  Routine Screen_Scale_2
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    CodeComponent code_JS_2
      Code Type = Both
      Begin Experiment:
        # changed round to round1 because round variable was already defined
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;

        round1 = function (a) {
            return Math.round(a);
        };
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        keys = []
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            #text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage_2.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top_2
      letterHeight = 0.08
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Hold your card up against the screen and resize this image to match the size of your card:

        Up arrow for taller, Down arrow for shorter
        Left arrow for narrower, Right arrow for wider
    TextComponent text_bottom_2
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage_2
      image = resources/bank-1300155_640.png
      size [set every repeat] = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_scale_2
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Immediate_Test_Prac_2
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    CodeComponent code_Prac_test_2
      Code Type = Both
      Begin Experiment:
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        psychoJS.eventManager.clearEvents()
        keys1 = [];
        if (OldImages == 0) {
            degup1 = ((-testNewLocStartVal)+90);
            pdeg1= (testNewLocStartVal);
        } else if (OldImages == 1) {
            degup1 = ((-testObj1LocStartVal2) +90);
            pdeg1 = (testObj1LocStartVal2);
        }
        Eccentricity1 = (2.1277 * ((x_scale + y_scale) / 2));
        Eccentricityobj1 = (4.3794 * ((x_scale + y_scale) / 2));
        obj1posx1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
        obj1posy1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
        pointer1posX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
        pointer1posY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
        //Eccentricity2 = (2.1277 * ((x_scale + y_scale) / 2));
        //Eccentricityobj2 = (4.3794 * ((x_scale + y_scale) / 2));
        //if (Imm_Delay != 2){
        //continueRoutine = true;
        //}
        //else if (Imm_Delay == 2){
           // continueRoutine = false:}
      Begin Routine:
        keys1 = []
        #keys1=event.getKeys()
        #if new image use the newlocstart val

        if OldImages == 0:
            degup1 = ((-testNewLocStartVal)+90)
            pdeg1= (testNewLocStartVal)
        elif OldImages == 1:
            degup1 = ((-testObj1LocStartVal2) +90)
            pdeg1 = (testObj1LocStartVal2)

        #degup1 = testObj1LocTargetVal
        #pdeg1 = -testObj1LocTargetVal+90

        #Object1Test
        Eccentricity1 = 2.1277*((x_scale+y_scale)/2)
        Eccentricityobj1 = 4.3794*((x_scale+y_scale)/2)

        obj1posx1 = Eccentricityobj1 * cos((pi/180) *(degup1))
        obj1posy1 = Eccentricityobj1 * sin((pi/180) *(degup1))

        pointer1posX1 = Eccentricity1 * cos((pi/180) *(degup1))
        pointer1posY1 = Eccentricity1 * sin((pi/180) *(degup1))
      Each Frame:
        keys1=event.getKeys()

        if len(keys1):
            if 'left' in keys1:
                degup1 = (degup1 + 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_ImmTest_Prac.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_Prac.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1 +90
            #pointer1.setOri([pdeg1])
            elif 'right' in keys1:
                degup1 = (degup1 - 2)
                posX1 = Eccentricityobj1 * cos((pi/180) *(degup1))
                posY1 = Eccentricityobj1 * sin((pi/180) *(degup1))
                obj1_ImmTest_Prac.setPos([posX1,posY1])
                pointposX1 =  Eccentricity1 * cos((pi/180) *(degup1))
                pointposY1 = Eccentricity1 * sin((pi/180) *(degup1))
                pointer1_Prac.setPos([pointposX1,pointposY1])
                pdeg1 = -degup1+90
            #pointer1.setOri([pdeg1])
        #if Imm_Delay != 2:
            #continueRoutine = True
        #else:
             #continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys1 = psychoJS.eventManager.getKeys();
        if (keys1.length) {
            if (_pj.in_es6("left", keys1)) {
                degup1 = (degup1 + 2);
                posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                obj1_ImmTest_Prac.setPos([posX1, posY1]);
                pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                pointer1_Prac.setPos([pointposX1, pointposY1]);
                pdeg1 = ((-degup1) + 90);
            } else {
                if (_pj.in_es6("right", keys1)) {
                    degup1 = (degup1 - 2);
                    posX1 = (Eccentricityobj1 * Math.cos(((pi / 180) * degup1)));
                    posY1 = (Eccentricityobj1 * Math.sin(((pi / 180) * degup1)));
                    obj1_ImmTest_Prac.setPos([posX1, posY1]);
                    pointposX1 = (Eccentricity1 * Math.cos(((pi / 180) * degup1)));
                    pointposY1 = (Eccentricity1 * Math.sin(((pi / 180) * degup1)));
                    pointer1_Prac.setPos([pointposX1, pointposY1]);
                    pdeg1 = ((-degup1) + 90);
                }
            }
        }
      End JS Routine:
        //pdeg2_adj = (((pdeg1 * (- 1)) + 90) % 360);
        pdeg2_adj = ((((pdeg1)%360) + 360)%360);
      End Routine:
        #for i in range(len(pdeg1)):
         #   pdeg1_neg[i] = -pdeg1[i]

        pdeg2_adj = (((pdeg1*-1) + 90) % 360);
    PolygonComponent graybackTest_5
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0
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    KeyboardComponent key_respWM_5
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent Loc_tr_ImmTest_Prac
      image = loc_cr_tr.png
      size [set every repeat] = $(2.9078*x_scale, 0.7270*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = height
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    ImageComponent Loc_tr_red_ImmTest_Prac
      image = locred_cr_tr.png
      size [set every repeat] = $(2.9078*x_scale, 0.7270*y_scale)
      startVal [time (s)] = 15
      units = height
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    ImageComponent circim_ImmTest_Prac
      image = circ.png
      size [set every repeat] = $(4.255*x_scale, 4.255*y_scale)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent pointer1_Prac
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      ori [set every frame] = pdeg1
      pos [set every repeat] = [pointer1posX1,pointer1posY1]
      shape = rectangle
      size [set every repeat] = [0.0625*x_scale, 0.25*y_scale]
      startVal [time (s)] = 0
      units = height
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    ImageComponent obj1_ImmTest_Prac
      image [set every repeat] = $FCim
      pos [set every repeat] = [obj1posx1,obj1posy1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
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    CodeComponent Var_ImmTest_Prac
      Code Type = JS
      Begin JS Experiment:
         function preventClick(event) { event.preventDefault(); }
         document.addEventListener("contextmenu", preventClick, event, false);
         document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData('respposX2', posX1);
        psychoJS.experiment.addData('respposY2', posY1);
        psychoJS.experiment.addData('locresp2', pdeg1);
        psychoJS.experiment.addData('locresp2_adj', pdeg2_adj);
        psychoJS.experiment.addData('location', degup1);

        thisExp.addData('respposX2', posX1);
        thisExp.addData('respposY2', posY1);
        thisExp.addData('locresp2', pdeg1);
        thisExp.addData('locresp2_adj', pdeg2_adj);

        pdeg1 = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        FCdisp1 = []
        FCleft1 = []
        FCright1 = []
        FCims1 = []
        FCims = []
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  Routine Mask
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    ImageComponent mask_2
      image = resources/noise14Circle_tr.png
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Feedback_Prac
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        trID = str(TrialID)
        Img = obj1

        #trID = str(trialID)
        #dispfile = 'resources2/DisplPrac'+ trID +'.jpg'
        #win.getMovieFrame()
        #win.saveMovieFrames('1.png')
        #if CueValidity == 1:
            #Img = obj1

        #if CueValidity == 0:
            #Img = obj2

        #if CueValidity == 0.5:
            #Img = obj3

        #CuedImg = ['resources/' + Img]

        #Object1
        Eccobj1 = 4.3794*((x_scale+y_scale)/2)

        deg1 = -obj1loc+90

        obj1px1 = Eccobj1 * cos((pi/180) *(deg1))
        obj1py1 = Eccobj1 * sin((pi/180) *(deg1))


        #Object2
        #Eccobj2 = 4.3794*((x_scale+y_scale)/2)

        #deg2 = -obj2loc+90

        #obj1posx2 = Eccobj2 * cos((pi/180) *(deg2))
        #obj1posy2 = Eccobj2 * sin((pi/180) *(deg2))

        #Object3
        #Eccobj3 = 4.3794*((x_scale+y_scale)/2)

        #deg3 = -obj3loc+90

        #obj1posx3 = Eccobj3 * cos((pi/180) *(deg3))
        #obj1posy3 = Eccobj3 * sin((pi/180) *(deg3))
    PolygonComponent graybackStudy_3
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Object1Study_2
      image [set every repeat] = $'resources/'+ obj1
      pos [set every repeat] = [obj1px1,obj1py1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent Feedback_Text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Feedback
      units = norm
      wrapWidth = 1.5
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  Routine Feedback_Display
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        trID = str(TrialID)
        Img = obj1
        #dispfile = 'resources/Displ'+ trID +'.jpg'

        #trID = str(trialID)
        #dispfile = 'resources2/DisplPrac'+ trID +'.jpg'
        #win.getMovieFrame()
        #win.saveMovieFrames('1.png')

        #CuedImg = ['resources/' + Img]

        #Object1

        Eccobj1 = 4.3794*((x_scale+y_scale)/2)

        deg1 = -obj1loc+90

        obj1px1 = Eccobj1 * cos((pi/180) *(deg1))
        obj1py1 = Eccobj1 * sin((pi/180) *(deg1))
    PolygonComponent graybackStudy_4
      fillColor = darkgray
      shape = rectangle
      size = $(13.5*x_scale, 13.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent Object_1_Feedback
      image [set every repeat] = $'resources/'+ obj1
      pos [set every repeat] = [obj1px1,obj1py1]
      size [set every repeat] = $(3.2*x_scale, 3.2*y_scale)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent Feedback_Text_Learn
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Feedback
      units = norm
      wrapWidth = 1.5
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  Routine fix_2
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    ImageComponent fixim_2
      image = resources/fixoutline_cr_tr.png
      size [set every repeat] = $(0.7092*x_scale, 0.7092*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine Attention_shapes1
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    TextComponent attention_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please click on the triangle.
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    PolygonComponent attention_circle1
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.2, 0.2)
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent attention_circle2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.3, 0.15)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle4
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle5
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.4, -0.05)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle6
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.65, -0.1)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle7
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.6, 0.4)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle8
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.65, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle9
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle10
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (0.6, 0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle11
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.1, 0.25)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle12
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle13
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle14
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = triangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent attention_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent attention_code
      Code Type = Both
      Begin JS Routine:
        attention1_pass = false;
        document.body.style.cursor = 'default';
      Begin Routine:
        attention1_pass = False
      Each Frame:
        # attention_circle14
        # attention_mouse

        if attention_mouse.isPressedIn(attention_circle14):
            attention1_pass = True
      Each JS Frame:
        if (attention_mouse.isPressedIn(attention_circle14)) {
            attention1_pass = true;
        }
      End JS Routine:
        psychoJS.experiment.addData("attention1_pass", attention1_pass);
        document.body.style.cursor = 'none';
      End Routine:
        thisExp.addData('attention1_pass', attention1_pass)
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  Routine Attention_shapes2
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    TextComponent attention_text_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please click on the cross.
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    PolygonComponent attention_circle1_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.25, -0.2)
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle2_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (-0.3, 0.15)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle3_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.45, 0.25)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle4_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle5_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.4, -0.05)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle6_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.65, -0.1)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle7_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.6, 0.37)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle8_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.65, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle9_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle10_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle11_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.1, 0.25)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle12_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle13_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_cross14_2
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.2, 0.15)
      saveStartStop = False
      shape = cross
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent attention_mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent attention_code_2
      Code Type = Both
      Begin JS Routine:
        attention2_pass = false;
        document.body.style.cursor = 'default';
      Begin Routine:
        attention2_pass = False
      Each Frame:
        if attention_mouse_2.isPressedIn(attention_cross14_2):
            attention2_pass = True
      Each JS Frame:
        if (attention_mouse_2.isPressedIn(attention_cross14_2)) {
            attention2_pass = true;
        }
      End JS Routine:
        psychoJS.experiment.addData("attention2_pass", attention2_pass);
        document.body.style.cursor = 'none';
      End Routine:
        thisExp.addData('attention2_pass', attention2_pass)
  Routine Attention_shapes3
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    TextComponent attention_text_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please click on the circle.
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    PolygonComponent attention_rectangle1_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle2_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.3, 0.14)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle3_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.4, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle4_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle5_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.43, -0.33)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle6_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.65, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle7_3
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      pos = (-0.6, 0.27)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle8_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.67, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle9_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.15, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle10_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle11_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.1, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle12_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_rectangle13_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (-0.1, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent attention_circle14_3
      fillColor = -0.1216, 0.0039, 0.1294
      lineColor = -0.1216, 0.0039, 0.1294
      pos = (0.47, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent attention_mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent attention_code_3
      Code Type = Both
      Begin JS Routine:
        attention3_pass = false;
        document.body.style.cursor = 'default';
      Begin Routine:
        attention3_pass = False
      Each Frame:
        if attention_mouse_3.isPressedIn(attention_circle14_3):
            attention3_pass = True
      Each JS Frame:
        if (attention_mouse_3.isPressedIn(attention_circle14_3)) {
            attention3_pass = true;
        }
      End JS Routine:
        psychoJS.experiment.addData("attention3_pass", attention3_pass);
        document.body.style.cursor = 'none';
      End Routine:
        thisExp.addData('attention3_pass', attention3_pass)
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
  Routine ImmTest1
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    CodeComponent Trial_Tracker_3
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize variables at the start of the experiment
        Attention = 0  # Start with Attention set to 0 (not running)
        attention1_shown = False  # Flag to track if Attention2_question has been shown
        # Assuming these variables are initialized elsewhere in your code
        consecutive_new_count_block1 = 0  # Count of consecutive "new" clicks (key '2')
        consecutive_old_count_block1  = 0  # Count of consecutive "old" clicks (key '1')
        newthreshold = 4  # Set a threshold for consecutive clicks (adjust as needed)
        oldthreshold = 6
      Begin Routine:
        # Check if the participant pressed 'new' (2) and it's the 4th trial or later
        #if Prac_Test.thisN >= 4 and FCKey2_3.keys == '2' and not attention2_shown:
        #    Attention = 1  # Set Attention to 1 to run Attention2_question
        #    attention2_shown = True  # Mark that Attention2_question has been shown
        #else:
        #    Attention = 0  # Do not run Attention2_question

        # Update counts based on user input
        if FCKey2.keys == '2':  # If "new" is pressed
            consecutive_new_count_block1  += 1
            consecutive_old_count_block1  = 0  # Reset the old count
        elif FCKey2.keys == '1':  # If "old" is pressed
            consecutive_old_count_block1  += 1
            consecutive_new_count_block1  = 0  # Reset the new count
        else:
            consecutive_new_count_block1  = 0  # Reset both if any other key is pressed
            consecutive_old_count_block1  = 0

        # Check conditions to decide whether to show the attention question
        if (ImmediateTest_1.thisN >= 14 and FCKey2.keys == '2' and not attention1_shown) or \
           (ImmediateTest_1.thisN == 28 and not attention1_shown) or \
           (consecutive_new_count_block1  > newthreshold and not attention1_shown) or \
           (consecutive_old_count_block1  > oldthreshold and not attention1_shown):
            Attention = 1  # Set Attention to 1 to run Attention2_question
            Fix=1
            attention1_shown = True  # Mark that Attention2_question has been shown
        else:
            Attention = 0  # Do not run Attention2_question
      End Routine:
        thisExp.addData('consecutive_new_count_block1 ', consecutive_new_count_block1 )
        thisExp.addData('consecutive_old_count_block1 ', consecutive_old_count_block1 )
  Routine Attention1
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    ImageComponent Attention_Image_1
      image = resources/AttentionCheck1.jpg
      size [set every repeat] = $(24*x_scale,13.5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_7
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Attention_Code_2
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        attention1a_pass= false;
        if ((FCKey2_7.keys !== undefined) && (FCKey2_7.keys == '1' || FCKey2_7.keys == '2')) {
            continueRoutine = true;
        }
      Begin Routine:
        attention1a_pass=False
      Each Frame:
        if (FCKey2_7.keys == '1'):
            attention1a_pass = True
      Each JS Frame:
        if (FCKey2_7.keys !== undefined) {
            if (FCKey2_7.keys == '1' || FCKey2_7.keys == '2') {
                continueRoutine = false; // End the routine if either key is pressed
            }
            if (FCKey2_7.keys == '1') {
                attention1a_pass = true; // Set to true if '1' is pressed
            }
        }
      End JS Routine:
        if ((FCKey2_7.keys !== undefined) && (FCKey2_7.keys == '1' || FCKey2_7.keys == '2')) {
            continueRoutine = true;
        }

        psychoJS.experiment.addData("attention1a_pass", attention1a_pass);
      End Routine:
        if '1' in FCKey2_7.keys or '2' in FCKey2_7.keys:
            continueRoutine = True  # Restart the loop (Go back to the next FC_1 routine)
        else:
            continueRoutine = False

        if 'left' in FCKey2_7.keys:
            FCim = FCims[0]

        # After the routine ends, mark that the attention question has been shown
        thisExp.addData('attention1a_pass', attention1a_pass)
  Routine Learn1Trial
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    CodeComponent Trial_Tracker_4
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize Attention
        Attention = 0

        # Check if the current trial is the one after which you want to show the attention check
        if Learn_1.thisN == 20:  # Change to the desired trial number
            Attention = 1
        else:
            Attention = 0
  Routine Learn2Trial
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    CodeComponent Trial_Tracker_5
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize Attention
        Attention = 0

        # Check if the current trial is the one after which you want to show the attention check
        if Learn_2.thisN == 20:  # Change to the desired trial number
            Attention = 1
        else:
            Attention = 0
  Routine Learn3Trial
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    CodeComponent Trial_Tracker_6
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize Attention
        Attention = 0

        # Check if the current trial is the one after which you want to show the attention check
        if Learn_3.thisN == 20:  # Change to the desired trial number
            Attention = 1
        else:
            Attention = 0
  Routine ImmTest2
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    CodeComponent Trial_Tracker_7
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize variables at the start of the experiment
        Attention = 0  # Start with Attention set to 0 (not running)
        attention2_shown = False  # Flag to track if Attention2_question has been shown
        # Assuming these variables are initialized elsewhere in your code
        consecutive_new_count_block2 = 0  # Count of consecutive "new" clicks (key '2')
        consecutive_old_count_block2 = 0  # Count of consecutive "old" clicks (key '1')
        newthreshold = 4  # Set a threshold for consecutive clicks (adjust as needed)
        oldthreshold = 6
      Begin Routine:
        # Check if the participant pressed 'new' (2) and it's the 4th trial or later
        #if Prac_Test.thisN >= 4 and FCKey2_3.keys == '2' and not attention2_shown:
        #    Attention = 1  # Set Attention to 1 to run Attention2_question
        #    attention2_shown = True  # Mark that Attention2_question has been shown
        #else:
        #    Attention = 0  # Do not run Attention2_question

        # Update counts based on user input
        if FCKey2.keys == '2':  # If "new" is pressed
            consecutive_new_count_block2 += 1
            consecutive_old_count_block2 = 0  # Reset the old count
        elif FCKey2.keys == '1':  # If "old" is pressed
            consecutive_old_count_block2 += 1
            consecutive_new_count_block2 = 0  # Reset the new count
        else:
            consecutive_new_count_block2 = 0  # Reset both if any other key is pressed
            consecutive_old_count_block2 = 0

        # Check conditions to decide whether to show the attention question
        if (ImmediateTest_2.thisN >= 14 and FCKey2.keys == '2' and not attention2_shown) or \
           (ImmediateTest_2.thisN == 28 and not attention2_shown) or \
           (consecutive_new_count_block2 > newthreshold and not attention2_shown) or \
           (consecutive_old_count_block2 > oldthreshold and not attention2_shown):
            Attention = 1  # Set Attention to 1 to run Attention2_question
            Fix=1
            attention2_shown = True  # Mark that Attention2_question has been shown
        else:
            Attention = 0  # Do not run Attention2_question
      End Routine:
        thisExp.addData('consecutive_new_count_block2', consecutive_new_count_block2)
        thisExp.addData('consecutive_old_count_block2', consecutive_old_count_block2)
  Routine Attention2
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    ImageComponent Attention_Image_2
      image = resources/AttentionCheck2.jpg
      size [set every repeat] = $(24*x_scale,13.5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_8
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Attention_Code_3
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        attention2a_pass= false;
        if ((FCKey2_8.keys !== undefined) && (FCKey2_8.keys == '1' || FCKey2_8.keys == '2')) {
            continueRoutine = true;
        }
      Begin Routine:
        attention2a_pass=False
      Each Frame:
        if (FCKey2_8.keys == '1'):
            attention2a_pass = True
      Each JS Frame:
        if (FCKey2_8.keys !== undefined) {
            if (FCKey2_8.keys == '1' || FCKey2_8.keys == '2') {
                continueRoutine = false; // End the routine if either key is pressed
            }
            if (FCKey2_8.keys == '1') {
                attention2a_pass = true; // Set to true if '1' is pressed
            }
        }
      End JS Routine:
        if ((FCKey2_8.keys !== undefined) && (FCKey2_8.keys == '1' || FCKey2_8.keys == '2')) {
            continueRoutine = true;
        }

        psychoJS.experiment.addData("attention2a_pass",attention2a_pass);
      End Routine:
        if '1' in FCKey2_8.keys or '2' in FCKey2_8.keys:
            continueRoutine = True  # Restart the loop (Go back to the next FC_1 routine)
        else:
            continueRoutine = False

        if 'left' in FCKey2_8.keys:
            FCim = FCims[0]

        # After the routine ends, mark that the attention question has been shown
        thisExp.addData('attention2a_pass', attention2a_pass)
  Routine ImmTest3
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    CodeComponent Trial_Tracker_8
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize variables at the start of the experiment
        Attention = 0  # Start with Attention set to 0 (not running)
        attention3_shown = False  # Flag to track if Attention2_question has been shown
        # Assuming these variables are initialized elsewhere in your code
        consecutive_new_count_block3 = 0  # Count of consecutive "new" clicks (key '2')
        consecutive_old_count_block3 = 0  # Count of consecutive "old" clicks (key '1')
        newthreshold = 4  # Set a threshold for consecutive clicks (adjust as needed)
        oldthreshold = 6
      Begin Routine:
        # Check if the participant pressed 'new' (2) and it's the 4th trial or later
        #if Prac_Test.thisN >= 4 and FCKey2_3.keys == '2' and not attention2_shown:
        #    Attention = 1  # Set Attention to 1 to run Attention2_question
        #    attention2_shown = True  # Mark that Attention2_question has been shown
        #else:
        #    Attention = 0  # Do not run Attention2_question

        # Update counts based on user input
        if FCKey2.keys == '2':  # If "new" is pressed
            consecutive_new_count_block3 += 1
            consecutive_old_count_block3 = 0  # Reset the old count
        elif FCKey2.keys == '1':  # If "old" is pressed
            consecutive_old_count_block3 += 1
            consecutive_new_count_block3 = 0  # Reset the new count
        else:
            consecutive_new_count_block3 = 0  # Reset both if any other key is pressed
            consecutive_old_count_block3 = 0

        # Check conditions to decide whether to show the attention question
        if (ImmediateTest_3.thisN >= 14 and FCKey2.keys == '2' and not attention3_shown) or \
           (ImmediateTest_3.thisN == 28 and not attention3_shown) or \
           (consecutive_new_count_block3 > newthreshold and not attention3_shown) or \
           (consecutive_old_count_block3 > oldthreshold and not attention3_shown):
            Attention = 1  # Set Attention to 1 to run Attention2_question
            Fix=1
            attention3_shown = True  # Mark that Attention2_question has been shown
        else:
            Attention = 0  # Do not run Attention2_question
      End Routine:
        thisExp.addData('consecutive_new_count_block3', consecutive_new_count_block3)
        thisExp.addData('consecutive_old_count_block3', consecutive_old_count_block3)
  Routine Attention3
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    ImageComponent Attention_Image_3
      image = resources/AttentionCheck3.jpg
      size [set every repeat] = $(24*x_scale,13.5*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent FCKey2_9
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Attention_Code_4
      Code Type = Both
      Begin Experiment:
        FCim = []
        degup1 = []
        keys1 = []
        posX1 = []
        posY1 = []
        pointposX1 = []
        pointposY1 = []

        degup2 = []
        keys2 = []
        posX2 = []
        posY2 = []
        pointposX2 = []
        pointposY2 = []

        degup3 = []
        keys3 = []
        posX3 = []
        posY3 = []
        pointposX3 = []
        pointposY3 = []
      Begin JS Experiment:
        FCim = [];
        degup1 = [];
        keys1 = [];
        posX1 = [];
        posY1 = [];
        pointposX1 = [];
        pointposY1 = [];
        degup2 = [];
        keys2 = [];
        posX2 = [];
        posY2 = [];
        pointposX2 = [];
        pointposY2 = [];
        degup3 = [];
        keys3 = [];
        posX3 = [];
        posY3 = [];
        pointposX3 = [];
        pointposY3 = [];
      Begin JS Routine:
        attention3a_pass= false;
        if ((FCKey2_9.keys !== undefined) && (FCKey2_9.keys == '1' || FCKey2_9.keys == '2')) {
            continueRoutine = true;
        }
      Begin Routine:
        attention3a_pass=False
      Each Frame:
        if (FCKey2_9.keys == '1'):
            attention3a_pass = True
      Each JS Frame:
        if (FCKey2_9.keys !== undefined) {
            if (FCKey2_9.keys == '1' || FCKey2_9.keys == '2') {
                continueRoutine = false; // End the routine if either key '1' or '2' is pressed
            }
            if (FCKey2_9.keys == '1') {
                attention3a_pass = true; // Set to true if '1' is pressed
            }
        }
      End JS Routine:
        if ((FCKey2_9.keys !== undefined) && (FCKey2_9.keys == '1' || FCKey2_9.keys == '2')) {
            continueRoutine = true;
        }

        psychoJS.experiment.addData("attention3a_pass",attention3a_pass);
      End Routine:
        if '1' in FCKey2_9.keys or '2' in FCKey2_9.keys:
            continueRoutine = True  # Restart the loop (Go back to the next FC_1 routine)
        else:
            continueRoutine = False

        if 'left' in FCKey2_9.keys:
            FCim = FCims[0]

        # After the routine ends, mark that the attention question has been shown
        thisExp.addData('attention3a_pass', attention3a_pass)
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
Flow
  Routine Scale_Intro
  Routine Screen_Scale_2
  Routine scaletonist
  Routine Study_File
  LoopInitiator instloop loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine Instructions
  LoopTerminator instloop
  Routine Practice_Text
  LoopInitiator Prac_Learn loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = condfile/Prac_Final_Merged_With_NA.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('obj1', 'chinesefood1_tr.png'), ('backgr', 'Bckg139.jpg'), ('obj1loc', 170.0), ('TrialID', 1.0), ('StudyTrialNum', 1.0), ('block', 1), ('testObj1', 1.0), ('testObj1Feat1', None), ('TestPracTrialNum', 1.0), ('testObj1Feat1TargetVal', 170.0), ('testObj1LocStartVal1', 213.0), ('testObj1LocStartVal2', 103.0), ('testObj1LocStartVal3', 146.0), ('testObj1LocTargetVal', 170.0), ('testObj1Target', 'chinesefood1_tr.png'), ('testObj1Foil', None), ('testObj1FCOrder', 0.0), ('testObj1FCleftItem', 'Target'), ('testObj1FCrightItem', 'Foil'), ('NewObject', None), ('OldImages', 1), ('testNewLocS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,
      OrderedDict([('obj1', 'cheese1_tr.png'), ('backgr', 'Bckg140.jpg'), ('obj1loc', 321.0), ('TrialID', 2.0), ('StudyTrialNum', 2.0), ('block', 2), ('testObj1', 1.0), ('testObj1Feat1', None), ('TestPracTrialNum', 2.0), ('testObj1Feat1TargetVal', 321.0), ('testObj1LocStartVal1', 22.0), ('testObj1LocStartVal2', 203.0), ('testObj1LocStartVal3', 95.0), ('testObj1LocTargetVal', 321.0), ('testObj1Target', 'cheese1_tr.png'), ('testObj1Foil', None), ('testObj1FCOrder', 1.0), ('testObj1FCleftItem', 'Foil'), ('testObj1FCrightItem', 'Target'), ('NewObject', None), ('OldImages', 1), ('testNewLocStartVal', Non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,
      OrderedDict([('obj1', 'cowboyhat1_tr.png'), ('backgr', 'Bckg142.jpg'), ('obj1loc', 276.0), ('TrialID', 3.0), ('StudyTrialNum', 3.0), ('block', 3), ('testObj1', 1.0), ('testObj1Feat1', None), ('TestPracTrialNum', 3.0), ('testObj1Feat1TargetVal', 276.0), ('testObj1LocStartVal1', 213.0), ('testObj1LocStartVal2', 218.0), ('testObj1LocStartVal3', 234.0), ('testObj1LocTargetVal', 276.0), ('testObj1Target', 'cowboyhat1_tr.png'), ('testObj1Foil', None), ('testObj1FCOrder', 1.0), ('testObj1FCleftItem', 'Foil'), ('testObj1FCrightItem', 'Target'), ('NewObject', None), ('OldImages', 1), ('testNewLocStartV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,
      OrderedDict([('obj1', 'minifan1_tr.png'), ('backgr', 'Bckg143.jpg'), ('obj1loc', 134.0), ('TrialID', 5.0), ('StudyTrialNum', 4.0), ('block', 4), ('testObj1', 1.0), ('testObj1Feat1', None), ('TestPracTrialNum', 4.0), ('testObj1Feat1TargetVal', 134.0), ('testObj1LocStartVal1', 56.0), ('testObj1LocStartVal2', 265.0), ('testObj1LocStartVal3', 92.0), ('testObj1LocTargetVal', 134.0), ('testObj1Target', 'minifan1_tr.png'), ('testObj1Foil', None), ('testObj1FCOrder', 1.0), ('testObj1FCleftItem', 'Foil'), ('testObj1FCrightItem', 'Target'), ('NewObject', None), ('OldImages', 1), ('testNewLocStartVal', N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
    Routine Mask
    Routine fix
    Routine Learn_Prac
    Routine fix
    Routine Test_Prac
    Routine fix
    Routine Feedback_Prac
  LoopTerminator Prac_Learn
  Routine ImmTest_Instruct_Prac
  LoopInitiator Prac_Test loopType="TrialHandler"
    conditionsFile = condfile/Prac_Final_Merged_With_NA.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine NewObject_Prac
    LoopInitiator OldPracTest loopType="TrialHandler"
      loopType = random
      nReps = myRepsPrac
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      Routine Immediate_Test_Prac_2
      Routine Remember_Rating_Prac
    LoopTerminator OldPracTest
    LoopInitiator pracfix loopType="TrialHandler"
      loopType = random
      nReps = fix
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      Routine fix_2
    LoopTerminator pracfix
  LoopTerminator Prac_Test
  Routine Prac_End
  Routine BlockTracker1
  LoopInitiator Learn_1 loopType="TrialHandler"
    Selected rows = 0:40
    conditionsFile = $cfile
    loopType = sequential
    nReps = 1
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    Routine Mask
    Routine fix
    Routine Learn_Display
    Routine fix
    Routine Display_Test
    Routine fix
    Routine Feedback_Display
    Routine Learn1Trial
    LoopInitiator AttentionLearn1 loopType="TrialHandler"
      loopType = random
      nReps = Attention
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      Routine Attention_shapes1
    LoopTerminator AttentionLearn1
  LoopTerminator Learn_1
  Routine Imm_Test_Instruct_1
  LoopInitiator ImmediateTest_1 loopType="TrialHandler"
    Selected rows = 0:28
    conditionsFile = $ImmTestFile
    loopType = sequential
    nReps = 1
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    Routine NewObject
    LoopInitiator OldTest1 loopType="TrialHandler"
      loopType = random
      nReps = myReps
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      Routine ImmediateTest
      Routine Remember_Rating
    LoopTerminator OldTest1
    Routine ImmTest1
    LoopInitiator FixAttention1 loopType="TrialHandler"
      loopType = random
      nReps = Fix
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      Routine fix_2
      LoopInitiator AttentionTest1 loopType="TrialHandler"
        loopType = random
        nReps = Attention
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        Routine Attention1
      LoopTerminator AttentionTest1
    LoopTerminator FixAttention1
  LoopTerminator ImmediateTest_1
  Routine BlockTracker2
  LoopInitiator Learn_2 loopType="TrialHandler"
    Selected rows = 56:96
    conditionsFile = $cfile
    loopType = sequential
    nReps = 1
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    Routine Mask
    Routine fix
    Routine Learn_Display
    Routine fix
    Routine Display_Test
    Routine fix
    Routine Feedback_Display
    Routine Learn2Trial
    LoopInitiator AttentionLearn2 loopType="TrialHandler"
      loopType = random
      nReps = Attention
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      Routine Attention_shapes2
    LoopTerminator AttentionLearn2
  LoopTerminator Learn_2
  Routine Imm_Test_Instruct_2
  LoopInitiator ImmediateTest_2 loopType="TrialHandler"
    Selected rows = 28:56
    conditionsFile = $ImmTestFile
    loopType = sequential
    nReps = 1
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    Routine NewObject
    LoopInitiator OldTest2 loopType="TrialHandler"
      loopType = random
      nReps = myReps
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      Routine ImmediateTest
      Routine Remember_Rating
    LoopTerminator OldTest2
    Routine ImmTest2
    LoopInitiator FixAttention2 loopType="TrialHandler"
      loopType = random
      nReps = Fix
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      Routine fix_2
      LoopInitiator AttentionTest2 loopType="TrialHandler"
        loopType = random
        nReps = Attention
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        Routine Attention2
      LoopTerminator AttentionTest2
    LoopTerminator FixAttention2
  LoopTerminator ImmediateTest_2
  Routine BLockTracker3
  LoopInitiator Learn_3 loopType="TrialHandler"
    Selected rows = 112:152
    conditionsFile = $cfile
    loopType = sequential
    nReps = 1
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    Routine Mask
    Routine fix
    Routine Learn_Display
    Routine fix
    Routine Display_Test
    Routine fix
    Routine Feedback_Display
    Routine Learn3Trial
    LoopInitiator AttentionLearn3 loopType="TrialHandler"
      loopType = random
      nReps = Attention
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      Routine Attention_shapes3
    LoopTerminator AttentionLearn3
  LoopTerminator Learn_3
  Routine Imm_Test_Instruct_3
  LoopInitiator ImmediateTest_3 loopType="TrialHandler"
    Selected rows = 56:84
    conditionsFile = $ImmTestFile
    loopType = sequential
    nReps = 1
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    Routine NewObject
    LoopInitiator OldTest3 loopType="TrialHandler"
      loopType = random
      nReps = myReps
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      Routine ImmediateTest
      Routine Remember_Rating
    LoopTerminator OldTest3
    Routine ImmTest3
    LoopInitiator FixAttention3 loopType="TrialHandler"
      loopType = random
      nReps = Fix
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      Routine fix_2
      LoopInitiator AttentionTest3 loopType="TrialHandler"
        loopType = random
        nReps = Attention
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        Routine Attention3
      LoopTerminator AttentionTest3
    LoopTerminator FixAttention3
  LoopTerminator ImmediateTest_3
  Routine End
